<CompuCell3D Revision="2" Version="4.5.0">
   
   <Metadata>
      
      <!-- Basic properties simulation -->
      <NumberOfProcessors>1</NumberOfProcessors>
      <DebugOutputFrequency>10</DebugOutputFrequency>
      <!-- <NonParallelModule Name="Potts"/> -->
   </Metadata>
   
   
   
   <Potts>
      
      <!-- Basic properties of CPM (GGH) algorithm -->
      <Dimensions x="1000" y="100" z="1"/>
      <Steps>1000</Steps>
      <Temperature>10.0</Temperature>
      <NeighborOrder>1</NeighborOrder>
   </Potts>
   
   <Plugin Name="CellType">
      
      <!-- Listing all cell types in the simulation -->
      <CellType TypeId="0" TypeName="Medium"/>
      <CellType TypeId="1" TypeName="A"/>
      <CellType TypeId="2" TypeName="B"/>
   </Plugin>
   
   <Plugin Name="Volume"/>
   
   <Plugin Name="Surface"/>
   
   <Plugin Name="CenterOfMass">
      
      <!-- Module tracking center of mass of each cell -->
   </Plugin>
   
   <Plugin Name="NeighborTracker">
      
      <!-- Module tracking neighboring cells of each cell -->
   </Plugin>
   
   <Plugin Name="BoundaryPixelTracker">
      
      <!-- Module tracking boundary pixels of each cell -->
      <NeighborOrder>1</NeighborOrder>
   </Plugin>
   
   <Plugin Name="Contact">
      <!-- Specification of adhesion energies -->
      <Energy Type1="Medium" Type2="Medium">10.0</Energy>
      <Energy Type1="Medium" Type2="A">1.0</Energy>
      <Energy Type1="Medium" Type2="B">10.0</Energy>
      <Energy Type1="A" Type2="A">50.0</Energy>
      <Energy Type1="A" Type2="B">50.0</Energy>
      <Energy Type1="B" Type2="B">50.0</Energy>
      <NeighborOrder>4</NeighborOrder>
   </Plugin>
   
   <Plugin Name="Chemotaxis">
      
      <!-- You may repeat ChemicalField element for each chemical field declared in the PDE solvers -->
      <!-- Specification of chemotaxis properties of select cell types. -->
      <ChemicalField Name="hello">
         
      </ChemicalField>
   </Plugin>
   
   <Steppable Type="DiffusionSolverFE">
      
      <!-- Specification of PDE solvers -->
      <DiffusionField Name="hello">
         <DiffusionData>
            <FieldName>hello</FieldName>
            <GlobalDiffusionConstant>0.0</GlobalDiffusionConstant>
            <GlobalDecayConstant>0.0</GlobalDecayConstant>
            <!-- Additional options are: -->
            <InitialConcentrationExpression>1</InitialConcentrationExpression> 
            <!-- <ConcentrationFileName>INITIAL CONCENTRATION FIELD - typically a file with path Simulation/NAME_OF_THE_FILE.txt</ConcentrationFileName> -->
            <DiffusionCoefficient CellType="A">0.005</DiffusionCoefficient>
            <DiffusionCoefficient CellType="B">0.0</DiffusionCoefficient>
            <DecayCoefficient CellType="A">0.01</DecayCoefficient>
            <DecayCoefficient CellType="B">0.0</DecayCoefficient>
         </DiffusionData>
         <SecretionData>
            <!-- When secretion is defined inside DissufionSolverFE all secretion constants are scaled automaticaly to account for the extra calls to the diffusion step when handling large diffusion constants -->
            
            <!-- Uniform secretion Definition -->
            <!--<Secretion Type="A">0.1</Secretion>-->
            <!--<Secretion Type="B">0.1</Secretion>-->
            <!-- <SecretionOnContact SecreteOnContactWith="A,B" Type="B">0.2</SecretionOnContact> -->
            <!-- <ConstantConcentration Type="B">0.1</ConstantConcentration> -->
         </SecretionData>
         <BoundaryConditions>
            <Plane Axis="X">
               <!--<ConstantDerivative PlanePosition="Min" Value="0.0"/>-->
               <!--<ConstantDerivative PlanePosition="Max" Value="0.0"/>-->
               <!-- Other options are (examples): -->
               <Periodic/> 
               <!-- <ConstantValue PlanePosition="Min" Value="1.0"/> -->
            </Plane>
            <Plane Axis="Y">
               <!--<ConstantDerivative PlanePosition="Min" Value="0.0"/>-->
               <!--<ConstantDerivative PlanePosition="Max" Value="0.0"/>-->
               <!-- Other options are (examples): -->
               <Periodic/> 
               <!-- <ConstantValue PlanePosition="Min" Value="1.0"/> -->
            </Plane>
         </BoundaryConditions>
      </DiffusionField>
   </Steppable>
   
   
   
   <Steppable Type="UniformInitializer">
      
      <!-- Initial layout of cells in the form of rectangular slab -->
      <Region>
         <BoxMin x="0" y="0" z="0"/>
         <BoxMax x="100" y="100" z="1"/>
         <Gap>0</Gap>
         <Width>10</Width>
         <Types>A,B</Types>
      </Region>
   </Steppable>
   
   
</CompuCell3D>
